PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Completed URL = $"https://app.prolific.com/submissions/complete?cc=C1M4HHIA"
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['stimuli/standard/both_trad_2.png', 'stimuli/standard/both_trad_3.png', 'stimuli/side_flip/both_trad_2.png', 'stimuli/side_flip/both_trad_3.png', 'stimuli/color_flip/both_trad_2.png', 'stimuli/color_flip/both_trad_3.png', 'stimuli/color_and_side_flip/both_trad_2.png', 'stimuli/color_and_side_flip/both_trad_3.png', 'stimuli/stock2.png', 'stimuli/standard/a1_tech_a2_trad.png', 'stimuli/standard/a1_trad_a2_tech.png', 'stimuli/standard/both_tech.png', 'stimuli/standard/both_trad.png', 'stimuli/side_flip/a1_tech_a2_trad.png', 'stimuli/side_flip/a1_trad_a2_tech.png', 'stimuli/side_flip/both_tech.png', 'stimuli/side_flip/both_trad.png', 'stimuli/color_flip/a1_tech_a2_trad.png', 'stimuli/color_flip/a1_trad_a2_tech.png', 'stimuli/color_flip/both_tech.png', 'stimuli/color_flip/both_trad.png', 'stimuli/color_and_side_flip/a1_tech_a2_trad.png', 'stimuli/color_and_side_flip/a1_trad_a2_tech.png', 'stimuli/color_and_side_flip/both_tech.png', 'stimuli/color_and_side_flip/both_trad.png', 'stimuli/envs.png', 'stimuli/example_pairing.png', 'stimuli/next.png', 'stimuli/plot.png', 'stimuli/selection.png', 'stimuli/stock.png', 'stimuli/stock_symbol.png', 'stimuli/training_investors.png', 'stimuli/training_stims.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = study_1
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the 'spot the market insider' task!
        This experiment aims to analyze whether people can identify market insiders making short-term bets by observing their investment decisions. Market insider are individuals, such as executives or employees, who have access to confidential and non-public information about a company, which could influence its stock price if it were publicly known.

        Press 'space' to start
    KeyboardComponent end_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent instruction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this experiment, your responses will be anonymized prior to analysis, ensuring no personal data is collected. We are interested in the collective response pattern from a broad participant group.

        Press 'space' to continue
    KeyboardComponent end_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine choice
    CodeComponent trial_code
      Code Type = Both
      Begin Experiment:
        condition_list = ["standard", "color_flip", "side_flip", "color_and_side_flip"]
        condition = condition_list[np.random.randint(0, 4)]

        thisExp.addData('condition', condition)
      Begin JS Experiment:
        conditionList = ["standard", "color_flip", "side_flip", "color_and_side_flip"];
        condition = conditionList[Math.floor(Math.random() * 4)];

        psychoJS.experiment.addData("condition", condition);
      Begin JS Routine:
        pathConditionMapper = {
            "1:1+2:1": `stimuli/${condition}/both_tech.png`,
            "1:2+2:2": (
                trial > 28 ? `stimuli/${condition}/both_trad_3.png` :
                trial > 14 ? `stimuli/${condition}/both_trad_2.png` :
                `stimuli/${condition}/both_trad.png`
            ),
            "1:1+2:2": condition.indexOf("side_flip") === -1 ? `stimuli/${condition}/a1_tech_a2_trad.png` : `stimuli/${condition}/a1_trad_a2_tech.png`,
            "1:2+2:1": condition.indexOf("side_flip") === -1 ? `stimuli/${condition}/a1_trad_a2_tech.png` : `stimuli/${condition}/a1_tech_a2_trad.png`,
        };

        image_path = pathConditionMapper[pairing];
      Begin Routine:
        path_condition_mapper = {
            "1:1+2:1": f"stimuli/{condition}/both_tech.png",
            "1:2+2:2": (
                f"stimuli/{condition}/both_trad_3.png" if trial > 28
                else f"stimuli/{condition}/both_trad_2.png" if trial > 14
                else f"stimuli/{condition}/both_trad.png"
            ),
            "1:1+2:2": f"stimuli/{condition}/a1_tech_a2_trad.png" if "side_flip" not in condition else f"stimuli/{condition}/a1_trad_a2_tech.png",
            "1:2+2:1": f"stimuli/{condition}/a1_trad_a2_tech.png" if "side_flip" not in condition else f"stimuli/{condition}/a1_tech_a2_trad.png",
        }

        image_path = path_condition_mapper[pairing]
    ImageComponent stimuli_img
      image [set every repeat] = $image_path
      size = (1.2, .9)
      startVal [time (s)] = 0.0
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    KeyboardComponent choices
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine reward_display
    CodeComponent reward_code
      Code Type = Auto->JS
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      Begin Routine:
        chosen_pair = choices.keys
        if chosen_pair == "1":
            obtained_reward = a1_reward

        if chosen_pair == "2":
            obtained_reward = a2_reward


        obtained_reward = float(obtained_reward)

        if obtained_reward >= 0:
            sign = "+"
            reward_color = [-1.0000, 0.0039, -1.0000]

        if obtained_reward < 0:
            sign = ""
            reward_color = [1, -1, -1]

        displayed_reward = sign + str(obtained_reward) + "$"
      End Routine:
        thisExp.addData('choices', choices.keys)
        thisExp.addData('rewards', obtained_reward)
    TextComponent reward_display_text
      color [set every repeat] = $reward_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $displayed_reward
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  Routine end_screen
    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment. Thank you for your participation!

        Press 'space' to save your data and be redirected to Prolific.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_2
    TextComponent instruction_text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During the task, you'll be selecting from various options, each providing a different number of game points. These points will be tallied at the end and converted into a bonus payment. You could earn up to an additional £3 based on your performance, which is separate from the guaranteed £2 completion reward.

        Press 'space' to continue
    KeyboardComponent end_instr_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_3
    TextComponent instruction_text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This experiment is part two of a larger study. First, we'll show you what your peers did in part one. Then, we'll guide you through your own task in this study.

        Press 'space' to continue
    KeyboardComponent end_instr_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine training
    ImageComponent training_stims
      image [set every repeat] = stimuli/example_pairing.png
      pos = (0, 0.1)
      size = (0.72464, 0.43400)
      startVal [time (s)] = 0.0
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    KeyboardComponent training_choice
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent training_instr
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Let's do a practice round! Select one of the two investors by pressing their corresponding number on your keyboard.
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    TextComponent one_txt
      color = black
      letterHeight = 0.05
      pos = (-0.3, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent two_txt
      color = black
      letterHeight = 0.05
      pos = (0.3, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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  Routine training_reward_display
    TextComponent training_reward_display_text
      letterHeight = 0.035
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Very good!
        When you select an investor, the reward they earned will either be added to your points (if it's positive) or deducted from your points (if it's negative).
        At the end of the experiment, we'll compare your total points with participants who weren't informed about the presence of market insiders the way you were. This will help us determine if you were successful in identifying the market insiders.
    TextComponent fake_training_reward
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +1.64$
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    KeyboardComponent next_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine real_instructions_3
    TextComponent reward_demo
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +3.72$
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    TextComponent instr_txt_2
      letterHeight = 0.03
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = When you have chosen the investor you want to investigate, you will see the result as a numerical value on your screen after selection.
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    KeyboardComponent end_instr_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine real_instructions_2
    ImageComponent investors
      image = stimuli/training_investors.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.012, 0.338)
      startVal [time (s)] = 0.0
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    TextComponent instr_txt
      letterHeight = 0.03
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = As mentioned, you will choose between two prior participants (investors) to examine whether you can spot the market insider or not. Like yourself, these participants were ensured anonymity. For this reason, you will be able to tell them apart by the colored icons seen above.
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    KeyboardComponent end_instr_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine real_instructions
    TextComponent instruction_text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The detailed instructions for your task start now.
        Please read them carefully. You can only score many points (and receive a large bonus payment) if you understand them well!

        Press 'space' to continue
    KeyboardComponent end_instr_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fake_instructions
    ImageComponent stocks_image
      image = stimuli/stock_symbol.png
      pos = (0, 0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent instruction_text_4
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In part one of the study, participants were tasked to invest into various stocks at a fictional stock market.
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    KeyboardComponent end_instr_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine fake_instructions_2
    TextComponent instruction_text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The experiment took place over multiple rounds. At the beginning of each round, participants were assigned a specific category of stocks to invest in.
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    KeyboardComponent end_instr_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine fake_instructions_3
    ImageComponent env_logos
      image = stimuli/envs.png
      pos = (0, 0.2)
      size = (0.7794, 0.2160)
      startVal [time (s)] = 0.0
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    TextComponent instruction_text_7
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Two examples of the categories presented were 'Hygiene' and 'Furniture', indicated respectively by the images shown above. Each of these categories contained a unique selection of 4 possible stocks to invest in.
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    KeyboardComponent end_instr_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine fake_instructions_4
    ImageComponent selection_img
      image = stimuli/selection.png
      pos = (0, 0.15)
      size = (0.9936, 0.5256)
      startVal [time (s)] = 0.0
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    TextComponent instruction_text_8
      letterHeight = 0.045
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Once assigned their category for the round, participants were shown the stocks it contained (symbolized by the 4 images shown above) and asked to invest in one of them.
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    KeyboardComponent end_instr_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine fake_instructions_5
    ImageComponent ind_stock
      image = stimuli/stock.png
      pos = (-0.1, 0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent instruction_text_9
      letterHeight = 0.045
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = After choosing a stock, the participants would be informed of the money they earned or lost by choosing this stock.
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    KeyboardComponent end_instr_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent fake_reward_txt
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (0.2, 0.15)
      startVal [time (s)] = 0.0
      text = +1.4$
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  Routine fake_instructions_6
    ImageComponent ind_stock_2
      image = stimuli/stock.png
      pos = (-0.1, 0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent instruction_text_10
      letterHeight = 0.045
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Then the next round would begin.
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    KeyboardComponent end_instr_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent fake_reward_txt_2
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos = (0.2, 0.15)
      startVal [time (s)] = 0.0
      text = +1.4$
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  Routine fake_instructions_7
    ImageComponent env_logos_2
      image = stimuli/envs.png
      pos = (0, 0.2)
      size = (0.7794, 0.2160)
      startVal [time (s)] = 0.0
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    TextComponent instruction_text_11
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = They would once again be randomly assigned one of the two categories of stocks.
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    KeyboardComponent end_instr_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine fake_instructions_8
    ImageComponent selection_img_2
      image = stimuli/selection.png
      pos = (0, 0.15)
      size = (0.9936, 0.5256)
      startVal [time (s)] = 0.0
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    TextComponent instruction_text_12
      letterHeight = 0.045
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Be shown the selection of stocks from the assigned category and asked to choose one of them.
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    KeyboardComponent end_instr_14
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine fake_instructions_9
    ImageComponent ind_stock_3
      image = stimuli/stock2.png
      pos = (-0.1, 0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent instruction_text_13
      letterHeight = 0.045
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Be shown the monetary reward they received or lost as a consequence of their chosen stock.
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    KeyboardComponent end_instr_15
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent fake_reward_txt_3
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.2, 0.15)
      startVal [time (s)] = 0.0
      text = -2.7$
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  Routine fake_instructions_10
    TextComponent instruction_text_15
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Each stock would yield a different amount of reward on average. Some stocks even changed their average reward over time.
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    KeyboardComponent end_instr_17
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine fake_instructions_11
    TextComponent instruction_text_16
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You can see the rewards yielded by four of these stocks in the diagram above. The reward is displayed on the y-axis while the rounds of the experiment are displayed on the x-axis. Each of the four stocks is represented by a colored line.
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    KeyboardComponent end_instr_18
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    ImageComponent avg_reward_img
      image = stimuli/plot.png
      pos = (0, 0.15)
      saveStartStop = False
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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  Routine fake_instructions_12
    TextComponent instruction_text_14
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = By repeating this process for multiple rounds, participants could learn which stocks generally made them the most money through a process of trial and error.
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    KeyboardComponent end_instr_16
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine fake_instructions_13
    TextComponent instruction_text_17
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = However, some participants were randomly selected to receive 'insider information' that would help them make more profitable choices, thus giving them an advantage over the 'normal' participants.
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    KeyboardComponent end_instr_19
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine fake_instructions_14
    TextComponent instruction_text_18
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This is where you come in. In your task, you will be able to select an investor and check how much money they made when investing in different markets. You'll be asked repeatedly to choose the investor you want to investigate, because each investor placed several bets during our experiment. Remember that some investors may have been 'insiders' on specific markets.
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    KeyboardComponent end_instr_20
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine real_instructions_2_5
    ImageComponent investors_2_sample
      image = stimuli/example_pairing.png
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.9058, 0.5425)
      startVal [time (s)] = 0.0
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    TextComponent instr_txt_3
      letterHeight = 0.03
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = To simplify the experience, you will only see two investors and the category they were assigned to. You will not have to deal with the individual stocks nested within the categories the way the prior participants did.
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    KeyboardComponent end_instr_21
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine att_check_primer
    TextComponent training_reward_display_text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have reached the end of the instructions! Before we begin the task, let's go over a couple of questions to see whether you understand your assignment.
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    KeyboardComponent next_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine att_check_1
    TextComponent q1
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your task in this experiment?
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    TextComponent resps
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. To choose all investors about equally often.

        2. To gain as many points as possible.

        3. To find out which category is best.
    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the number key corresponding to your answer.
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    KeyboardComponent att1_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine att_1_feedback
    CodeComponent att1_code
      Code Type = Auto->JS
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      Begin Routine:
        wrong_resp = "Wrong! Your task in this experiment is to gather as many points as possible."
        correct_resp = "Correct!"
        feedback_txt = None

        att1_resp_key = att1_resp.keys

        if att1_resp_key != "2":
            feedback_txt = wrong_resp
        else:
            feedback_txt = correct_resp
      End Routine:
        thisExp.addData('att_response', att1_resp_key)
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_txt
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    KeyboardComponent continue_feed
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine exp_start_primer
    TextComponent instruction_text_19
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment is about to begin. Remember:

        1. Some investors might have received insider information.
        2. Your task is to gather as many points as possible - choose whichever pairing of investor and condition you think will yield the highest reward.
        3. Select your chosen pairing by pressing the '1' or '2' key on your keyboard.

        Press 'space' to start the experiment
    KeyboardComponent end_instr_22
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  PavloviaSurveyRoutine ubsurvey
    surveyId = 834053af-e5d4-47f7-a8d2-1f5b8a2737eb
    surveyJson = atts_cats.JSON
    surveyType = id
Flow
  Routine welcome
  Routine instructions
  Routine instructions_2
  Routine instructions_3
  Routine fake_instructions
  Routine fake_instructions_2
  Routine fake_instructions_3
  Routine fake_instructions_4
  Routine fake_instructions_5
  Routine fake_instructions_6
  Routine fake_instructions_7
  Routine fake_instructions_8
  Routine fake_instructions_9
  Routine fake_instructions_10
  Routine fake_instructions_11
  Routine fake_instructions_12
  Routine fake_instructions_13
  Routine fake_instructions_14
  Routine real_instructions
  Routine real_instructions_2
  Routine real_instructions_2_5
  Routine real_instructions_3
  Routine training
  Routine training_reward_display
  Routine att_check_primer
  Routine att_check_1
  Routine att_1_feedback
  Routine exp_start_primer
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = tables/data.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial': 1, 'pairing': '1:2+2:2', 'a1_reward': 3.32, 'a2_reward': 4.28, 'agent_option_1': 'agent_1', 'condition_option_1': 'condition_2', 'agent_option_2': 'agent_2', 'condition_option_2': 'condition_2'},
      {'trial': 2, 'pairing': '1:2+2:2', 'a1_reward': 4.46, 'a2_reward': 6.54, 'agent_option_1': 'agent_1', 'condition_option_1': 'condition_2', 'agent_option_2': 'agent_2', 'condition_option_2': 'condition_2'},
      {'trial': 3, 'pairing': '1:2+2:2', 'a1_reward': 4.54, 'a2_reward': 5.85, 'agent_option_1': 'agent_1', 'condition_option_1': 'condition_2', 'agent_option_2': 'agent_2', 'condition_option_2': 'condition_2'},
      {'trial': 4, 'pairing': '1:2+2:2', 'a1_reward': 2.66, 'a2_reward': 5.8, 'agent_option_1': 'agent_1', 'condition_option_1': 'condition_2', 'agent_option_2': 'agent_2', 'condition_option_2': 'condition_2'},
      {'trial': 5, 'pairing': '1:2+2:2', 'a1_reward': 1.92, 'a2_reward': 4.66, 'agent_option_1': 'agent_1', 'condition_option_1': 'condition_2', 'agent_option_2': 'agent_2', 'condition_option_2': 'condition_2'},
      {'trial': 6, 'pairing': '1:2+2:2', 'a1_reward': 1.51, 'a2_reward': 5.1, 'agent_option_1': 'agent_1', 'condition_option_1': 'condition_2', 'agent_option_2': 'agent_2', 'condition_option_2': 'condition_2'},
      {'trial': 7, 'pairing': '1:2+2:2', 'a1_reward': 2.75, 'a2_reward': 5.15, 'agent_option_1': 'agent_1', 'condition_option_1': 'condition_2', 'agent_option_2': 'agent_2', 'condition_option_2': 'condition_2'}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
    Routine choice
    Routine reward_display
  LoopTerminator trials
  Routine end_screen
